---
API: 2.1
OpenSesame: 3.3.11
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "RSVP demo experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Volumes/GoogleDrive/My Drive/projecten_rug/CIT/bthesis_feb22/experiment/demo_experiment"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define RSVP_plugin RSVP
	set description "Add an RSVP to your experiment"
	set _targets_shuffle yes
	set _targets "[T1]"
	set _target_positions "[T1pos];9"
	set _stimdur 133
	set _ntargets 2
	set _ndistractors 10
	set _mode images
	set _fixdur 1000
	set _event_handler ""
	set _distractors_shuffle yes
	set _distractors "distractors.txt"

define notepad RSVP_demo
	__note__
	This experiment demonstrates the RSVP plugin
	
	If you have not yet installed the plugin, run the following command in your Opensesame console:
	
	pip.main(['install', 'opensesame-plugin-RSVP'])
	
	If you want to make sure you have the newest version of the plugin, you can upgrade it with the following command:
	
	pip.main(['install', 'opensesame-plugin-RSVP', '--upgrade'])
	
	If you have questions or feedback, please let me know @ robbertmijn@gmail.com
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define sketchpad ask_response
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press z if you saw a cat first<br />Press m if you saw a dog first" x=0 y=0 z_index=0

define loop block_loop
	set source table
	set repeat 5
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 T1 "cats.txt"
	setcycle 0 T1pos 5
	setcycle 0 correct_response z
	setcycle 1 T1 "dogs.txt"
	setcycle 1 T1pos 5
	setcycle 1 correct_response m
	setcycle 2 T1 "cats.txt"
	setcycle 2 T1pos 8
	setcycle 2 correct_response z
	setcycle 3 T1 "dogs.txt"
	setcycle 3 T1pos 8
	setcycle 3 correct_response m
	setcycle 4 T1 "cat_1.png;dog_1.png"
	setcycle 4 T1pos 5
	setcycle 4 correct_response z
	setcycle 5 T1 "dog_1.png;cat_1.png"
	setcycle 5 T1pos 5
	setcycle 5 correct_response m
	setcycle 6 T1 "cat_1.png;dog_1.png"
	setcycle 6 T1pos 8
	setcycle 6 correct_response z
	setcycle 7 T1 "dog_1.png;cat_1.png"
	setcycle 7 T1pos 8
	setcycle 7 correct_response m
	run trial_sequence

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run RSVP_demo always
	run block_loop always

define feedback feedback
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[correct] = 1" text="Correct!" x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[correct] = 0" text="Incorrect!" x=0 y=0 z_index=0

define keyboard_response get_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;m"

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run RSVP always
	run ask_response always
	run get_response always
	run feedback always

